CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:49
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Volumetric:Yes
    x:0.13
    y:0.13
    z:0.29
    Select the rule criteria:and (file does contain "nuc")
    Name to assign these images:nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "mem")
    Name to assign these images:membrane
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Input:nucleus
    Output:nuc_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Input:membrane
    Output:membrane_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
Resize:[module_num:7|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
    Input:membrane_rescaled
    Output:downsize_mem
    Resizing method:Resize by specifying desired final dimensions
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    Width of the final image:256
    Height of the final image:256
    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Manual
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    Additional image count:0

Resize:[module_num:8|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
    Input:nuc_rescaled
    Output:downsize_nuc
    Resizing method:Resize by specifying desired final dimensions
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    Width of the final image:256
    Height of the final image:256
    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Manual
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    Additional image count:0

MedianFilter:[module_num:9|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
    Input:downsize_mem
    Output:membrane_med
    Window:3

MedianFilter:[module_num:10|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
    Input:downsize_nuc
    Output:nuc_med
    Window:3

GaussianFilter:[module_num:11|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
    Input:nuc_med
    Output:nyc_gaus
    Sigma:3

AdaptiveLocalNormalization:[module_num:12|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enabled:False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
    Input:nyc_gaus
    Output:AdaptiveLocalNormalization
    Standard Deviation Threshold:0.6
    Maximum Radius:20
    Radius Method:std
    Structuring Element Shape:square

Active contour model:[module_num:13|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
    Input:nyc_gaus
    Object:ActiveContourModel
    Iterations:20
    Alpha:0.2
    Threshold:0.0

ApplyThreshold:[module_num:14|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
    Input:nyc_gaus
    Output:NucApplyThreshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

Remove objects:[module_num:15|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enabled:False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
    Input:ActiveContourModel
    Output:RemoveObjects
    Size:10000

ConvertObjectsToImage:[module_num:16|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
    Select the input objects:ActiveContourModel
    Name the output image:NucSegLevelset
    Select the color format:Binary (black & white)
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
Closing:[module_num:17|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enabled:False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
    Input:NucSegLevelset
    Output:Closing
    Structuring element:ball,5

Opening:[module_num:18|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
    Input:NucSegLevelset
    Output:Opening
    Structuring element:ball,5

Remove holes:[module_num:19|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
    Input:Opening
    Output:RemoveHoles
    Size:100

Watershed:[module_num:20|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
    Input:RemoveHoles
    Object:Watershed
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:26

ExpandOrShrinkObjects:[module_num:21|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enabled:False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
    Select the input objects:Watershed
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:4
    Fill holes in objects so that all objects shrink to a single point?:No
    Retain the outlines of the identified objects?:No
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
ConvertObjectsToImage:[module_num:22|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
    Select the input objects:Watershed
    Name the output image:Seed
    Select the color format:uint16
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
Erosion:[module_num:23|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enabled:False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
    Input:Seed
    Output:SeedErosion
    Structuring element:cube,11

Seeding:[module_num:24|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
    Input:Seed
    Output:Seeding_withtopbottom

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:Seeding_withtopbottom
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    Select method for constructing file names:Single name
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    Enter single file name:nuc_seed_final
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    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
Active contour model:[module_num:26|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
    Input:membrane_rescaled
    Object:ActiveContourModelMem
    Iterations:20
    Alpha:0.2
    Threshold:0.0

ConvertObjectsToImage:[module_num:27|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
    Select the input objects:ActiveContourModelMem
    Name the output image:MemSegLevelset
    Select the color format:Binary (black & white)
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
Remove objects:[module_num:28|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
    Input:ActiveContourModelMem
    Output:RemoveObjectsBigMem
    Size:20

ConvertObjectsToImage:[module_num:29|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
    Select the input objects:RemoveObjectsBigMem
    Name the output image:MemBigObject
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:30|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MemSpots
    Image or measurement?:Image
    Select the first image:MemSegLevelset
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:MemBigObject
    Multiply the second image by:1.0
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
ImageMath:[module_num:31|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MemSpots
    Image or measurement?:Image
    Select the first image:MemSegLevelset
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:MemBigObject
    Multiply the second image by:1.0
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
ImageMath:[module_num:32|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MemSpotsMeanInt
    Image or measurement?:Image
    Select the first image:MemSpots
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:MemBigObject
    Multiply the second image by:1.0
    Measurement:Intensity_MeanIntensity_membrane

ImageMath:[module_num:33|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:NotspotIntensity
    Image or measurement?:Image
    Select the first image:MemBigObject
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:100.0
    Measurement:Intensity_MeanIntensity

LaplacianOfGaussian:[module_num:34|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
    Input:membrane_med
    Output:LaplacianOfGaussian
    Sigma x:30.0
    Sigma y:30.0
    Sigma z:1.0

ImageMath:[module_num:35|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:-0.5
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:LOG_neg
    Image or measurement?:Image
    Select the first image:LaplacianOfGaussian
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:LaplacianOfGaussian
    Multiply the second image by:1.0
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
ApplyThreshold:[module_num:36|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
    Input:LOG_neg
    Output:ThreshBlue
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.0
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
ImageMath:[module_num:37|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:ImageAfterMath_final
    Image or measurement?:Image
    Select the first image:membrane
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ThreshBlue
    Multiply the second image by:1000000.0
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
RescaleIntensity:[module_num:38|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
    Input:ImageAfterMath_final
    Output:RescaleIntensity_MEMLOG
    Rescaling method:Stretch each image to use the full intensity range
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
Watershed:[module_num:39|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
    Input:RescaleIntensity_MEMLOG
    Object:WatershedCell
    Generate from:Markers
    Markers:Seeding_withtopbottom
    Mask:Leave blank
    Connectivity:16

ConvertObjectsToImage:[module_num:40|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
    Select the input objects:WatershedCell
    Name the output image:CellImage
    Select the color format:uint16
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
OverlayOutlines:[module_num:41|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:nuc_rescaled
    Name the output image:NucSegOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Watershed
    Select outline color:Green
    Select objects to display:WatershedCell

OverlayOutlines:[module_num:42|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:membrane_med
    Name the output image:MemSegOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Watershed
    Select outline color:Green
    Select objects to display:WatershedCell

Save:[module_num:43|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
    Directory:Default Output Folder|
    Image:Seed
    Color depth:16

Save:[module_num:44|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
    Directory:Default Output Folder|
    Image:CellImage
    Color depth:16

Save:[module_num:45|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
    Directory:Default Output Folder|
    Image:NucSegOverlay
    Color depth:16

Save:[module_num:46|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
    Directory:Default Output Folder|
    Image:MemSegOverlay
    Color depth:16

MeasureObjectIntensity:[module_num:47|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
    Hidden:1
    Select an image to measure:downsize_nuc
    Select objects to measure:Watershed

MeasureTexture:[module_num:48|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:downsize_nuc
    Select objects to measure:Watershed
    Texture scale to measure:3
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:No
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    Measure images or objects?:Objects

ExportToSpreadsheet:[module_num:49|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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